close();
open("/home/user/SpectroCCD/Images/2016-03-02/Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
close();
close();
run("Analyze Particles...");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
run("Revert");
run("Analyze Particles...", "size=0-9 display clear summarize");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt-1.fits");
close();
selectWindow("RawIntDen Distribution");
close();
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
close();
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
close();
selectWindow("RawIntDen Distribution");
close();
selectWindow("RawIntDen Distribution");
close();
close();
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
close();
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
close();
selectWindow("RawIntDen Distribution");
close();
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
close();
selectWindow("RawIntDen Distribution");
close();
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
run("Enhance Contrast", "saturated=0.35");
makeRectangle(386, 88, 1384, 258);
run("Enhance Contrast", "saturated=0.35");
run("Analyze Particles...", "size=1-16 display clear summarize in_situ");
close();
close();
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
run("Enhance Contrast", "saturated=0.35");
makeRectangle(842, 172, 598, 252);
run("Enhance Contrast", "saturated=0.35");
makeRectangle(1680, 140, 258, 188);
close();
selectWindow("RawIntDen Distribution");
close();
run("Distribution...");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
close();
close();
run("Find Maxima...");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
makeRectangle(768, 174, 752, 420);
run("Enhance Contrast", "saturated=0.35");
run("Find Maxima...", "noise=10 output=[Segmented Particles]");
close();
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
run("Find Maxima...", "noise=10 output=[Maxima Within Tolerance]");
//setTool("zoom");
close();
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
close();
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
selectWindow("RawIntDen Distribution");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
selectWindow("RawIntDen Distribution");
run("Close All");
saveAs("BMP", "/home/user/SpectroCCD/Images/2016-03-02/RawIntDenDistributionFeXrays.bmp");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
run("Enhance Contrast", "saturated=0.35");
//setTool("rectangle");
makeRectangle(360, 62, 389, 235);
run("Enhance Contrast", "saturated=0.35");
//setTool("zoom");
run("Mean...", "radius=5");
//setTool("rectangle");
makeRectangle(559, 172, 191, 107);
run("Enhance Contrast", "saturated=0.35");
run("Enhance Contrast", "saturated=0.35");
run("Enhance Contrast", "saturated=0.35");
run("Enhance Contrast", "saturated=0.35");
run("Enhance Contrast", "saturated=0.35");
run("Enhance Contrast", "saturated=0.35");
run("Enhance Contrast", "saturated=0.35");
run("Enhance Contrast", "saturated=0.35");
run("Enhance Contrast", "saturated=0.35");
run("Find Maxima...", "noise=1 output=List");
run("Find Maxima...", "noise=2 output=List");
run("Clear Results");
run("Clear Results");
run("Find Maxima...", "noise=2 output=List");
run("Find Maxima...");
run("Set Measurements...", "area standard center bounding integrated median redirect=None decimal=3");
run("Find Edges");
run("Find Maxima...");
close();
run("Revert");
run("Mean...", "radius=5");
makeRectangle(616, 201, 94, 48);
run("Enhance Contrast", "saturated=0.35");
run("Find Maxima...", "noise=2 output=[Single Points]");
//setTool("zoom");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
imageCalculator("Multiply create 32-bit", "Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits","Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits Maxima");
selectWindow("Result of Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
//setTool("zoom");
//setTool("rectangle");
makeRectangle(1808, 88, 308, 175);
makeRectangle(1934, 52, 434, 276);
close();
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
run("Image Calculator...");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits Maxima");
run("32-bit");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
imageCalculator("Multiply create 32-bit", "Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits","Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits Maxima");
selectWindow("Result of Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
makeRectangle(994, 70, 590, 320);
//setTool("zoom");
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
makeRectangle(994, 70, 590, 320);
close();
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits Maxima");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits Maxima");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
run("Image Calculator...");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits Maxima");
//setTool("zoom");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits Maxima");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
imageCalculator("Multiply create 32-bit", "Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits","Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits Maxima");
selectWindow("Result of Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
//setTool("zoom");
//setTool("rectangle");
makeRectangle(577, 51, 446, 210);
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
makeRectangle(2374, 382, 122, 10);
selectWindow("Result of Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
makeRectangle(2374, 16, 64, 10);
selectWindow("Result of Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
makeRectangle(577, 51, 446, 210);
//setTool("zoom");
makeRectangle(577, 51, 446, 210);
makeRectangle(577, 51, 446, 210);
saveAs("FITS", "/home/user/SpectroCCD/Images/2016-03-02/Result of Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt_avrgr5_maskMAx.fits");
makeRectangle(577, 51, 446, 210);
//setTool("rectangle");
run("Analyze Particles...", "size=1 display clear summarize in_situ");
run("Main Window [return]");
run("Show All");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
selectWindow("RawIntDenDistributionFeXrays.bmp");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits Maxima");
selectWindow("Result of Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt_avrgr5_maskMAx.fits");
close();
selectWindow("Result of Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt_avrgr5_maskMAx.fits");
close();
selectWindow("RawIntDen Distribution");
close();
selectWindow("RawIntDenDistributionFeXrays.bmp");
close();
close();
selectWindow("Result of Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt_avrgr5_maskMAx.fits");
close();
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
selectWindow("Resultofimage_orig_D2016-03-02T17:32:48_backgr_subtr_UnShuf_median_subt.fits");
